OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Jozef Legény
0x8c1fc55b = 1.0
0x9f5c4075 = SSVEP Acquisition Test
0xf6b2e3fa = SSVEP
0xf8034a49 = Inria

0x341d3912 Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream=#0.Signal stream -> 0x341d3912 CSV File Writer
  Filename = C:/Users/ystar/Dropbox/Works/Demo/Data analysis/RAW.csv
  Precision = 10
  Append data = false
  Only last matrix = false

CSV File Reader => #2
  Filename = E:/Earable+VA/earable-VA/TestData/OpenVIBE/record-[2019.05.21-09.36.50].csv
#2.Output stream -> Identity
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 59
  High Cut-off Frequency (Hz) = 61
  Band Pass Ripple (dB) = 0.5
-> Temporal filter "EMG Bandpass Filter" => #5
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 10
  Low cut frequency (Hz) = 50.000000
  High cut frequency (Hz) = 100.000000
  Pass band ripple (dB) = 0.500000
-> 0x341d3912 Time based epoching
  Epoch duration (in sec) = 2
  Epoch intervals (in sec) = 1
-> 0x341d3912 Simple DSP
  Equation = x*x
-> 0x341d3912 Signal average => #8
Data=#8 -> 0x341d3912 Signal display "EMG power"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 2
  Vertical Scale = 60
  Vertical Offset = 39
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
Data=#5 -> Signal display "EMG signal"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 2
  Vertical Scale = 200
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
#5 -> EMG
  Clock frequency (Hz) = 64
  Script = E:/Earable+VA/earable-VA/OpenVIBE_Scripts/python/EMG.py
Input stream=#5 -> 0x341d3912 CSV File Writer
  Filename = C:/Users/ystar/Dropbox/Works/Demo/Data analysis/EMG.csv
  Precision = 10
  Append data = false
  Only last matrix = false
